PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = LocalizerExperiment
  keyboardBackend = ioHub
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Routines
  Routine Houses
    ImageComponent House_Pics
      image [set every repeat] = $Condition
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if len (key_resp_4.keys) == 2:
                    continueRoutine = False
  Routine WaitForScanner
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        lower_end = 1
        upper_end = 9
        use_row = str(lower_end)+":"+str(upper_end)
        counter_list = []
        counter = 1
      Begin Experiment:
        filename2 = "summarized_datafile"
        thisExp2 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath='C:\\Users\\herrd\\Documents\\GitHub\\fmri_project_um\\TestRun\\data_summarized',
            savePickle=True, saveWideText=True,
            dataFileName=filename2)
        kb = keyboard.Keyboard()
      Begin Routine:
        event.waitKeys(keyList='5')
      Each Frame:
        if len (key_resp.keys) == 5:
                    for x in key_resp.keys:
                        counter = counter+1
                        counter_list.append(counter)
                    thisExp.addData('counter', counter_list)
                    thisExp2.addData('condition', "waiting")
                    thisExp2.addData('counter', counter_list)
                    thisExp2.nextEntry()
                    counter_list = []
                    continueRoutine = False
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for Scanner...
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    PolygonComponent polygon
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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  Routine RestBetweenBlocks
    KeyboardComponent key_resp_2
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if len (key_resp_2.keys) == 20:
                    continueRoutine = False
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for next Block...
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  Routine Rest
    KeyboardComponent key_resp_3
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        store_rep = 0
      Each Frame:
        if len (key_resp_3.keys) == 8:
                    for x in key_resp_3.keys:
                        counter = counter+1
                        counter_list.append(counter)
                    thisExp.addData('counter', counter_list)
                    thisExp2.addData('condition', "resting")
                    thisExp2.addData('counter', counter_list)
                    thisExp2.nextEntry()
                    counter_list = []
                    continueRoutine = False
      End Routine:
        store_rep = blocks.thisTrialN
        print(store_rep)
        if store_rep == 1:
            lower_end = lower_end+8
            upper_end = upper_end+8
            print("lowerend:"+str(lower_end)+"and"+"upperend:"+str(upper_end))
            use_row = str(lower_end)+":"+str(upper_end)
    PolygonComponent polygon_4
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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  Routine routine_0_75sec_Face_House
    ImageComponent image
      image [set every repeat] = $stim_images
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        store_picture1 = ""
        store_picture2 = ""
      Begin Routine:
        store_picture1 = trials.thisTrial.get("stim_images")
      End Routine:
        thisExp2.addData('picture1', store_picture1)
        thisExp2.addData('counter', counter_list)
        thisExp2.nextEntry()
    PolygonComponent polygon_2
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine restPeriod
  Routine routine_075sec_Face_or_House
  Routine routine_2nd_Pic
  Routine x_2
  Routine test3
    ImageComponent image_2
      image [set every repeat] = $stim_images2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        store_picture2 = trials.thisTrial.get("stim_images2")
      Each Frame:
        if len (key_resp_5.keys) == 1:
                    counter = counter+1
                    counter_list.append(counter)
                    thisExp2.addData('picture2', store_picture2)
                    thisExp2.addData('counter', counter_list)
                    thisExp2.nextEntry()
                    thisExp.addData('counter', counter_list)
                    counter_list = []
                    continueRoutine = False
    PolygonComponent polygon_3
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
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Flow
  Routine WaitForScanner
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = Cond.xlsx
    loopType = sequential
    nReps = 12
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    conditions:
      [{'cond_file': 'Face_Images.csv'},
      {'cond_file': 'House_Images.csv'}]
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $use_row
      conditionsFile = $cond_file
      loopType = random
      nReps = 1
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      Routine routine_0_75sec_Face_House
      Routine test3
    LoopTerminator trials
    Routine Rest
  LoopTerminator blocks
