PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Demo_almost_all_features
  keyboardBackend = ioHub
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Routines
  Routine Stim2_2
  Routine Stim2_3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $Stim2
  Routine Stimulus1
    TextComponent StimuliTimer1
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli1
      image [set every frame] = $Stim1
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim1
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if len (TR_Stim1.keys) == 1:
                    for i in TR_Stim1.keys:
                        counter_list.append(counter)
                        counter = counter+1


                    thisExp2.addData('condition',condition+"_Stim1")
                    thisExp2.addData('TR counter',counter_list)
                    thisExp2.addData('oddball',oddball1.keys)
                    thisExp2.nextEntry()
                    counter_list=[]
                    continueRoutine = False
    KeyboardComponent oddball1
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent fixation_cross_3
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine Stimulus2
    TextComponent StimuliTimer2
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli2
      image [set every frame] = $Stim2
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim2
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_6
      Code Type = Auto->JS
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      Each Frame:
        if len (TR_Stim2.keys) == 1:
                    for i in TR_Stim2.keys:
                        counter_list.append(counter)
                        counter = counter+1
                    thisExp2.addData('condition',condition+"_Stim2")
                    thisExp2.addData('TR counter',counter_list)
                    thisExp2.addData('oddball',oddball2.keys)
                    thisExp2.nextEntry()
                    counter_list=[]
                    continueRoutine = False
    KeyboardComponent oddball2
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent fixation_cross_4
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine Stimulus3
    TextComponent StimuliTimer3
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli3
      image [set every frame] = $Stim3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim3
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Each Frame:
        if len (TR_Stim3.keys) == 1:
                    for i in TR_Stim3.keys:
                        counter_list.append(counter)
                        counter = counter+1
                    thisExp2.addData('condition', condition+"_Stim3")
                    thisExp2.addData('TR counter',counter_list)
                    thisExp2.addData('oddball',oddball3.keys)
                    thisExp2.nextEntry()
                    counter_list=[]
                    continueRoutine = False
    KeyboardComponent oddball3
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent fixation_cross_5
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine Stimulus4
    TextComponent StimuliTimer4
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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    ImageComponent Stimuli4
      image [set every frame] = $Stim4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    KeyboardComponent TR_Stim4
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if len (TR_Stim4.keys) == 1:
                    for i in TR_Stim4.keys:
                        counter_list.append(counter)
                        counter = counter+1
                    thisExp2.addData('condition',condition+"_Stim4")
                    thisExp2.addData('TR counter',counter_list)
                    thisExp2.addData('oddball',oddball4.keys)
                    thisExp2.nextEntry()
                    counter_list=[]
                    continueRoutine = False
    KeyboardComponent oddball4
      allowedKeys [set every repeat] = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent fixation_cross_6
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine Rest15secs
    TextComponent text_8
      letterHeight = 0.05
      pos = (0,-0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text = Scanner Resting
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $t
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        condition = "rest_scanner"
      Each Frame:
        if len (rest_key.keys) == 8:
            for i in rest_key.keys:
                counter_list.append(counter)
                counter = counter+1
            thisExp2.addData('condition',condition)
            thisExp2.addData('TR counter',counter_list)
            thisExp2.nextEntry()
            counter_list = []
            continueRoutine = False
    KeyboardComponent rest_key
      allowedKeys = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      store = all keys
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    PolygonComponent fixation_cross_7
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine RestEither3or6Secs
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TimeBetween
      text [set every frame] = $t
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        jitter = trials.thisTrial.get("TimeBetween")
      Each Frame:
        if jitter == 1.5:
            if len (key_resp.keys) == 1:
                counter_list.append(counter)
                counter = counter+1
                thisExp2.addData('condition', condition+"_Jitter")
                thisExp2.addData('TR counter',counter_list)
                thisExp2.addData('Jitter Time',jitter)
                thisExp2.nextEntry()
                counter_list = []
                continueRoutine = False
        if jitter == 3.0:
            if len (key_resp.keys) == 2:
                for i in key_resp.keys:
                        counter_list.append(counter)
                        counter = counter+1
                thisExp2.addData('condition',condition+"_Jitter")
                thisExp2.addData('TR counter',counter_list)
                thisExp2.addData('Jitter Time',jitter)
                thisExp2.nextEntry()
                counter_list = []
                continueRoutine = False
        if jitter == 4.5:
            if len (key_resp.keys) == 3:
                for i in key_resp.keys:
                        counter_list.append(counter)
                        counter = counter+1
                thisExp2.addData('condition',condition+"_Jitter")
                thisExp2.addData('TR counter',counter_list)
                thisExp2.addData('Jitter Time',jitter)
                thisExp2.nextEntry()
                counter_list = []
                continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    PolygonComponent fixation_cross_2
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine routine_5TR_PrePeriod
    KeyboardComponent waiting_TR
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      store = all keys
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    TextComponent text
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = Waiting for Scanner
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        scanner_msg = "Waiting for Scanner"
        counter = 0
        counter_list = []
      Begin Experiment:
        filename2 = "test"
        thisExp2 = data.ExperimentHandler(name=expName, version='',
            extraInfo=expInfo, runtimeInfo=None,
            originPath='C:\\Users\\herrd\\Documents\\GitHub\\fmri_project_um\\TestRun\\Demo_almost_all_features.py',
            savePickle=True, saveWideText=True,
            dataFileName=filename2)
      Each Frame:
        if len (waiting_TR.keys) == 5:
            for i in waiting_TR.keys:
                counter_list.append(counter)
                counter = counter+1
            thisExp2.addData('condition', scanner_msg)
            thisExp2.addData('TR counter', counter_list)
            thisExp2.nextEntry()
            counter_list=[]
            continueRoutine = False
    PolygonComponent fixation_cross
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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  Routine routine_5TR_EndPeriod
  Routine routine_5TR_PostPeriod
  Routine Prompt
    TextComponent text_9
      letterHeight = 0.05
      pos = (0,0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every frame]:
        $t
    ImageComponent Prompts
      image [set every frame] = $Prompt
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent Prompt1TR
      allowedKeys [set every repeat] = '5'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        condition = ""
      Begin Routine:
        condition = trials.thisTrial.get("Condition")
      Each Frame:
        if len (Prompt1TR.keys) == 1:
                    for i in Prompt1TR.keys:
                        counter_list.append(counter)
                        counter = counter+1

                    thisExp2.addData('condition',condition+"_Prompt")
                    thisExp2.addData('TR counter',counter_list)
                    thisExp2.nextEntry()
                    counter_list=[]
                    continueRoutine = False
    PolygonComponent fixation_cross_8
      fillColor = white
      lineColor = red
      shape = cross
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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Flow
  Routine routine_5TR_PrePeriod
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Prompt', 'Pictures/SHPrompt1.png '), ('Stim1', 'stimulus_variations/square_1.png'), ('Stim2', 'stimulus_variations/square_2_var1.png'), ('Stim3', 'stimulus_variations/square_3_var1.png'), ('Stim4', 'stimulus_variations/square_4_var1.png'), ('TimeBetween', 1.5), ('Condition', 'SH_var1')]),
      OrderedDict([('Prompt', 'Pictures/SFPrompt1.png'), ('Stim1', 'stimulus_variations/square_1.png'), ('Stim2', 'stimulus_variations/square_2_var1.png'), ('Stim3', 'stimulus_variations/square_3_var1.png'), ('Stim4', 'stimulus_variations/square_4_var1.png'), ('TimeBetween', 3.0), ('Condition', 'SF_var1')]),
      OrderedDict([('Prompt', 'Pictures/OHPrompt1.png'), ('Stim1', 'stimulus_variations/oval_1.png'), ('Stim2', 'stimulus_variations/oval_2_var1.png'), ('Stim3', 'stimulus_variations/oval_3_var1.png'), ('Stim4', 'stimulus_variations/oval_4_var1.png'), ('TimeBetween', 4.5), ('Condition', 'OH_var1')]),
      OrderedDict([('Prompt', 'Pictures/OFPrompt1.png'), ('Stim1', 'stimulus_variations/oval_1.png'), ('Stim2', 'stimulus_variations/oval_2_var1.png'), ('Stim3', 'stimulus_variations/oval_3_var1.png'), ('Stim4', 'stimulus_variations/oval_4_var1.png'), ('TimeBetween', 1.5), ('Condition', 'OF_var1')]),
      OrderedDict([('Prompt', 'Pictures/SHPrompt1.png '), ('Stim1', 'stimulus_variations/square_1.png'), ('Stim2', 'stimulus_variations/square_2_var2.png'), ('Stim3', 'stimulus_variations/square_3_var2.png'), ('Stim4', 'stimulus_variations/square_4_var2.png'), ('TimeBetween', 3.0), ('Condition', 'SH_var2')])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
    Routine Prompt
    Routine RestEither3or6Secs
    Routine Stimulus1
    Routine Stimulus2
    Routine Stimulus3
    Routine Stimulus4
    Routine Rest15secs
  LoopTerminator trials
