PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TestRunVariableNames
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Condition
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    TextComponent text_9
      letterHeight = 0.05
      pos = (0,0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every frame]:
        $t
  Routine Stim2_2
  Routine Stim2_3
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $Stim2
  Routine Stimulus1
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Stim1
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    TextComponent text_11
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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  Routine Stimulus2
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $Stim2
    TextComponent text_12
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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  Routine Stimulus3
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Stim3
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    TextComponent text_13
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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  Routine Stimulus4
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text [set every repeat]:
        $Stim4
    TextComponent text_14
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $t
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  Routine Rest15secs
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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    TextComponent text_15
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
      text [set every frame] = $t
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  Routine RestEither3or6Secs
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TimeBetween
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    TextComponent text_10
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TimeBetween
      text [set every frame] = $t
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.csv
    isTrials = False
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('Condition', 'Square House Picture'), ('Stim1', 'S1'), ('Stim2', 'S2'), ('Stim3', 'S3'), ('Stim4', 'S4'), ('TimeBetween', 6)]),
      OrderedDict([('Condition', 'Square Face Picture'), ('Stim1', 'S1'), ('Stim2', 'S2'), ('Stim3', 'S3'), ('Stim4', 'S4'), ('TimeBetween', 3)]),
      OrderedDict([('Condition', 'Oval House Picture'), ('Stim1', 'O1'), ('Stim2', 'O2'), ('Stim3', 'O3'), ('Stim4', 'O4'), ('TimeBetween', 6)]),
      OrderedDict([('Condition', 'Oval Face Picture'), ('Stim1', 'O1'), ('Stim2', 'O2'), ('Stim3', 'O3'), ('Stim4', 'O4'), ('TimeBetween', 3)])]
    Routine trial
    Routine RestEither3or6Secs
    Routine Stimulus1
    Routine Stimulus2
    Routine Stimulus3
    Routine Stimulus4
    Routine Rest15secs
  LoopTerminator trials
